PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Data filename = u"data/%s_%s_%s" % (expInfo['Student Number'] or 'anon', expName, expInfo['date'])
  End Message = Thank you for your participation!
  Experiment info = {'Student Number': '', 'Week (4, 5, 6, 7, 8, or 10)': ''}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['stimuli_master_simple.csv', 'images/Slide1.PNG', 'images/Slide2.PNG', 'images/Slide3.PNG', 'images/Slide4.PNG', 'images/Slide5.PNG', 'images/Slide6.PNG', 'images/Slide7.PNG', 'images/Slide8.PNG', 'images/Slide9.PNG', 'images/Slide10.PNG', 'images/Slide11.PNG', 'images/Slide12.PNG', 'images/Slide13.PNG', 'images/Slide14.PNG', 'images/Slide15.PNG', 'images/Slide16.PNG', 'images/Slide17.PNG', 'images/Slide18.PNG', 'images/Slide19.PNG', 'images/Slide20.PNG', 'images/Slide21.PNG', 'images/Slide22.PNG', 'images/Slide23.PNG', 'images/Slide24.PNG', 'images/Slide25.PNG', 'images/Slide26.PNG', 'images/Slide27.PNG', 'images/Slide28.PNG', 'images/Slide29.PNG', 'images/Slide30.PNG', 'images/Slide31.PNG', 'images/Slide32.PNG', 'images/Slide33.PNG', 'images/Slide34.PNG', 'images/Slide35.PNG', 'images/Slide36.PNG', 'images/Slide37.PNG', 'images/Slide38.PNG', 'images/Slide39.PNG', 'images/Slide40.PNG', 'images/Slide41.PNG', 'images/Slide42.PNG', 'images/Slide43.PNG', 'images/Slide44.PNG', 'images/Slide45.PNG', 'images/Slide46.PNG', 'images/Slide47.PNG', 'images/Slide48.PNG', 'images/Slide49.PNG', 'images/Slide50.PNG', 'images/Slide51.PNG', 'images/Slide52.PNG', 'images/Slide53.PNG', 'images/Slide54.PNG', 'images/Slide55.PNG', 'images/Slide56.PNG', 'images/Slide57.PNG', 'images/Slide58.PNG', 'images/Slide59.PNG', 'images/Slide60.PNG']
  Screen = 1
  Units = height
  Window size (pixels) = [1707, 1067]
  expName = CHEM112 SRP Study V3
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine Intro
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    TextComponent introText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the Spaced Retrieval Practice Study!
        You will be given a set of questions, please answer to the best of your ability. Once you have finished typing, press [Enter] to submit.
        Feedback for a Correct or Incorrect Answer will be shown for 10 seconds, afterwards the new question will show.
        If you are ready, press [Space] to begin.
    KeyboardComponent introKey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent introCode
      Code Type = JS
      Before JS Experiment:
        // ---- global placeholders so early references never crash ----
        var IntroClock, introText, introKey;
        var SetRepsClock, TrialClock, FeedbackClock, SummaryClock;
        var stimImage, promptTxt, respBox, warnTxt, invalidPanel, invalidText;
        var fbTxt, sumTxt, sumKB;

        // guards some builds touch very early:
        if (typeof window.currentLoop === 'undefined') window.currentLoop = null;
        if (typeof window.frameDur === 'undefined') window.frameDur = 1/60;

        // Guard: some builds touch frameDur very early
        if (typeof window.frameDur === 'undefined') { window.frameDur = 1/60; }
    CodeComponent currentLoopFix
      Code Type = JS
      Before JS Experiment:
        // Guards so early references never crash
        if (typeof window.currentLoop === 'undefined') { window.currentLoop = null; }
        if (typeof window.frameDur === 'undefined') { window.frameDur = 1/60; }
  Routine Trial
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    CodeComponent TrialCode
      Code Type = JS
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      Begin JS Experiment:
        // ---- Dialog keys (renamed fields) ----
        const WEEK_KEY = 'Week (4, 5, 6, 7, 8, or 10)';
        const STUDENT_KEY = 'Student Number';
        const ALLOWED_WEEKS = new Set([4, 5, 6, 7, 8, 10]);

        function parseWeek(expInfo) {
          const s = (expInfo[WEEK_KEY] ?? '').toString().trim();
          const m = s.match(/\d+/);
          const wk = m ? parseInt(m[0]) : 4;
          return ALLOWED_WEEKS.has(wk) ? wk : 4;
        }

        var CURRENT_WEEK = parseWeek(expInfo);

        // ---------- Utilities ----------
        function norm_answer(s) {
          if (!s) return '';
          s = s.trim().toLowerCase();
          s = s.replace(/[\s,-]+/g, '');
          s = s.replace(/[–—]/g, '-');
          return s;
        }

        function answer_set(correct_answer) {
          if (!correct_answer) return new Set();
          const alts = correct_answer.split('||').map(a => a.trim()).filter(a => a.length > 0);
          return new Set(alts.map(norm_answer));
        }

        // Per-week repetition rule (no week/session cols in CSV)
        function repsFor(topic_val, week_val) {
          const t = (topic_val ?? '').toString().trim().toLowerCase();
          if (t === 'organic')     return [4,5,7,10].includes(week_val) ? 1 : 0;
          if (t === 'dimensional') return [4,6,8,10].includes(week_val) ? 1 : 0;
          if (t === 'inorganic')   return week_val === 10 ? 4 : 0;
          return 0;
        }

        // Summary counters
        var TOTAL_TRIALS = 0;
        var TOTAL_CORRECT = 0;

        // Vars passed to Feedback
        var acc = null;
        var resp_raw = '';
        var corr_answer_display = '';
      Begin JS Routine:
        // Clear keys so prior Enter can't leak in
        psychoJS.eventManager.clearEvents();

        // Reset input & overlay
        respBox.setText('');
        var invalidFlag = false;
        var invalidClock = null;
        invalidPanel.setOpacity(0);
        invalidText.setOpacity(0);

        // RT & scoring state
        var _trialClock = new util.Clock();
        var _rt_started = false;
        var _rt = -1.0;

        var _response_raw = '';
        var _response_norm = '';
        var is_correct = -1;  // becomes 0/1 only on valid submission

        // Acceptable answers for this row
        var _correct_ans_norm = answer_set(correct_answer);

        // Image visibility for prompt-only trials
        const stim_has_image = !!(image_file && image_file.toString().trim().length > 0);
        stimImage.setOpacity(stim_has_image ? 1 : 0);

        // Reset hand-off vars
        acc = null;
        resp_raw = '';
        corr_answer_display = '';
      Each JS Frame:
        // Keep routine alive unless we explicitly end it
        continueRoutine = true;

        // Start RT on first draw
        if (!_rt_started) {
          _rt_started = true;
          _trialClock.reset();
        }

        // If overlay is showing, hold for ~2 s then hide and let them retry
        if (invalidFlag) {
          if (invalidClock === null) {
            invalidClock = new util.Clock();
            invalidClock.reset();
          }
          invalidPanel.setOpacity(0.8);
          invalidText.setOpacity(1);
          if (invalidClock.getTime() >= 2.0) {
            invalidFlag = false;
            invalidPanel.setOpacity(0);
            invalidText.setOpacity(0);
            respBox.setText('');               // force a fresh attempt
            psychoJS.eventManager.clearEvents(); // flush Enter
          }
          // stay in this routine
        } else {
          // Handle Enter manually (no Builder keyboard component)
          const keys = psychoJS.eventManager.getKeys({ keyList: ['return', 'enter'] });
          if (keys.length > 0) {
            // sanitize textbox (remove CR/LF so Enter never adds newlines)
            _response_raw = (respBox.text ?? '').toString().replace(/\r|\n/g, '');
            respBox.setText(_response_raw);
            _response_norm = norm_answer(_response_raw);

            // INVALID: empty or < 2 normalized characters
            if (_response_norm.length < 2) {
              invalidFlag = true;
              psychoJS.eventManager.clearEvents();
              // overlay will show on next frames; keep routine alive
            } else {
              // VALID: score & end to Feedback
              _rt = _trialClock.getTime();
              if (_correct_ans_norm.size > 0) {
                is_correct = _correct_ans_norm.has(_response_norm) ? 1 : 0;
              } else {
                is_correct = 0;
              }

              // Log trial data now in End Routine; prep feedback vars here
              acc = is_correct;
              resp_raw = _response_raw;
              corr_answer_display = correct_answer;

              continueRoutine = false; // go to Feedback
            }
          }
        }
      End JS Routine:
        // Only log a row if there was a VALID submission this attempt
        if (is_correct >= 0) {
        // derive student + week directly from expInfo (no external constants)
        const _sn = (expInfo['Student Number'] ?? '');
        const _wStr = (expInfo['Week (4, 5, 6, 7, 8, or 10)'] ?? '').toString();
        const _m = _wStr.match(/\d+/);
        const _wk = _m ? parseInt(_m[0]) : 4;

        psychoJS.experiment.addData('student_number', _sn);
        psychoJS.experiment.addData('week', _wk);

          psychoJS.experiment.addData('topic', topic);
          psychoJS.experiment.addData('subtype', subtype);
          psychoJS.experiment.addData('item_id', item_id);
          psychoJS.experiment.addData('image_file', image_file);
          psychoJS.experiment.addData('prompt_text', prompt_text);
          psychoJS.experiment.addData('correct_answer', correct_answer);
          psychoJS.experiment.addData('response_raw', _response_raw);
          psychoJS.experiment.addData('response_norm', _response_norm);
          psychoJS.experiment.addData('rt', _rt);
          psychoJS.experiment.addData('accuracy', is_correct);

          TOTAL_TRIALS += 1;
          TOTAL_CORRECT += is_correct;
        }
    ImageComponent stimImage
      image [set every repeat] = $image_file
      pos = (0, 0.25)
      size = (0.5, 0.45)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent promptTxt
      letterHeight = 0.05
      pos = (0, 0.05)
      startVal [time (s)] = 0.0
      text [set every repeat] = $prompt_text
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    TextboxComponent respBox
      bold = False
      editable = True
      letterHeight = 0.05
      placeholder = Type your answer, then press [Enter]
      pos = (0, -0.35)
      size = (0.9, 0.12)
      startVal [time (s)] = 0.0
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    TextComponent warnTxt
      color = 1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      opacity = 0
      pos = (0, -0.48)
      text = Please type an answer before submitting
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    PolygonComponent invalidPanel
      fillColor = -1.0000, -1.0000, -1.0000
      opacity = 0
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent invalidText
      letterHeight = 0.05
      opacity = 0
      startVal [time (s)] = 0.0
      text = Answer invalid. Please properly attempt the question.
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  Routine Feedback
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    CodeComponent FBCode
      Code Type = Both
      Begin JS Routine:
        // If no valid submission, skip feedback
        if (acc === null) {
          continueRoutine = false;
        } else {
          if (acc === 1) {
            fbTxt.setText(`Correct!\n\nYour response: ${resp_raw}`);
          } else {
            const keyStr = corr_answer_display ? `\nCorrect answer: ${corr_answer_display}` : '';
            fbTxt.setText(`Incorrect.\n\nYour response: ${resp_raw}${keyStr}`);
          }
          fbClock = new util.Clock();
          fbClock.reset();
        }
      Begin Routine:
        from psychopy import core

        if acc is None:
            continueRoutine = False
        else:
            if acc == 1:
                fbTxt.text = f"Correct!\n\nYour response: {resp_raw}"
            else:
                key_str = f"\nCorrect answer: {corr_answer_display}" if corr_answer_display else ""
                fbTxt.text = f"Incorrect.\n\nYour response: {resp_raw}{key_str}"
            fbClock = core.Clock()
            fbClock.reset()
      Each Frame:
        if fbClock.getTime() >= 2.0:
            continueRoutine = False
      Each JS Frame:
        if (typeof fbClock !== 'undefined' && fbClock.getTime() >= 2.0) {
          continueRoutine = false;
        }
    TextComponent fbTxt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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  Routine Summary
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    TextComponent sumTxt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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    KeyboardComponent sumKB
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent SumCode
      Code Type = Both
      Begin Experiment:
        TOTAL_TRIALS = 0
        TOTAL_CORRECT = 0
      Begin JS Experiment:
        TOTAL_TRIALS = 0;
        TOTAL_CORRECT = 0;
      Begin JS Routine:
        const pct = (TOTAL_TRIALS > 0) ? (100.0 * TOTAL_CORRECT / TOTAL_TRIALS) : 0.0;
        sumTxt.setText(
          `Session complete!\n\n` +
          `Correct: ${TOTAL_CORRECT} / ${TOTAL_TRIALS} (${pct.toFixed(1)}%)\n\n` +
          `Press SPACE to finish.`
        );
      Begin Routine:
        pct = (100.0 * TOTAL_CORRECT / TOTAL_TRIALS) if TOTAL_TRIALS > 0 else 0.0
        sumTxt.text = (
            f"Session complete!\n\n"
            f"Correct: {TOTAL_CORRECT} / {TOTAL_TRIALS} ({pct:.1f}%)\n\n"
            f"Press SPACE to finish."
        )
      End JS Routine:
        TOTAL_TRIALS += 1;
        TOTAL_CORRECT += is_correct;
      End Routine:
        TOTAL_TRIALS += 1
        TOTAL_CORRECT += is_correct
  Routine Invalid
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    TextComponent invTxt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Answer invalid. Please properly attempt the question.
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    CodeComponent invCode
      Code Type = Auto->JS
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      Begin Routine:
        from psychopy import core
        # Only show when Trial flagged invalid
        if not showInvalid:
            continueRoutine = False
        else:
            invClock = core.Clock()
            invClock.reset()
      Each Frame:
        # Show message ~2 seconds, then end
        if 'invClock' in globals() and invClock.getTime() >= 2.0:
            continueRoutine = False
  Routine AttemptController
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    CodeComponent AttemptCode
      Code Type = Auto->JS
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      Begin Routine:
        a# If no reps were scheduled, end the inner loop immediately (safety)
        if REPS_LEFT <= 0:
            attemptLoop.finished = True
        else:
            # Only reduce reps on a VALID attempt; invalid attempts don't consume reps
            if attempt_ok:
                REPS_LEFT -= 1
            # Stop when we've reached the required number of valid repetitions
            if REPS_LEFT <= 0:
                attemptLoop.finished = True
  Routine SetReps
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    CodeComponent SetRepsCode
      Code Type = Both
      Begin JS Routine:
        let _wstr = (expInfo['Week (4, 5, 6, 7, 8, or 10)'] ?? '').toString().trim();
        let _m = _wstr.match(/\d+/); let _wk = _m ? parseInt(_m[0]) : 4;

        let _t = (typeof topic === 'undefined' || topic === null) ? '' : topic.toString().trim().toLowerCase();

        if (_t === 'inorganic' && _wk === 10) {
          window.attemptReps = 4;
        } else if (_t === 'organic' && [4,5,7,10].includes(_wk)) {
          window.attemptReps = 1;
        } else if (_t === 'dimensional' && [4,6,8,10].includes(_wk)) {
          window.attemptReps = 1;
        } else {
          window.attemptReps = 0;
        }
      Begin Routine:
        import re
        _wstr = str(expInfo['Week (4, 5, 6, 7, 8, or 10)']).strip()
        _m = re.search(r'\d+', _wstr); _wk = int(_m.group()) if _m else 4

        try:
            _t = (topic or '').strip().lower()
        except NameError:
            _t = ''

        if _t == 'inorganic' and _wk == 10:
            attemptReps = 4
        elif _t == 'organic' and _wk in (4, 5, 7, 10):
            attemptReps = 1
        elif _t == 'dimensional' and _wk in (4, 6, 8, 10):
            attemptReps = 1
        else:
            attemptReps = 0
Flow
  Routine Intro
  LoopInitiator trialsLoop loopType="TrialHandler"
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('item_id', 'ORG001'), ('topic', 'organic'), ('subtype', 'name_from_image'), ('prompt_text', None), ('image_file', 'images/Slide1.PNG'), ('correct_answer', '1,4-dibromobenzene'), ('notes', None)]),
      OrderedDict([('item_id', 'ORG002'), ('topic', 'organic'), ('subtype', 'name_from_image'), ('prompt_text', None), ('image_file', 'images/Slide2.PNG'), ('correct_answer', '1,2-dimethylcyclopentane'), ('notes', None)]),
      OrderedDict([('item_id', 'ORG003'), ('topic', 'organic'), ('subtype', 'name_from_image'), ('prompt_text', None), ('image_file', 'images/Slide3.PNG'), ('correct_answer', '2,3-dimethyloctane'), ('notes', None)]),
      OrderedDict([('item_id', 'ORG004'), ('topic', 'organic'), ('subtype', 'name_from_image'), ('prompt_text', None), ('image_file', 'images/Slide4.PNG'), ('correct_answer', '2,3-dimethylpentane'), ('notes', None)]),
      OrderedDict([('item_id', 'ORG005'), ('topic', 'organic'), ('subtype', 'name_from_image'), ('prompt_text', None), ('image_file', 'images/Slide5.PNG'), ('correct_answer', '2-hydroxypentanoic acid'), ('notes', None)]),
      OrderedDict([('item_id', 'ORG006'), ('topic', 'organic'), ('subtype', 'name_from_image'), ('prompt_text', None), ('image_file', 'images/Slide6.PNG'), ('correct_answer', '2-methyl-3-heptyne'), ('notes', None)]),
      OrderedDict([('item_id', 'ORG007'), ('topic', 'organic'), ('subtype', 'name_from_image'), ('prompt_text', None), ('image_file', 'images/Slide7.PNG'), ('correct_answer', '2-methylpropan-2-ol'), ('notes', None)])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
    Routine SetReps
    LoopInitiator attemptLoop loopType="TrialHandler"
      loopType = random
      nReps = attemptReps
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      Routine Trial
      Routine Feedback
    LoopTerminator attemptLoop
  LoopTerminator trialsLoop
  Routine Summary
